PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SimonTask
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    PolygonComponent Stimulus
      fillColor [set every repeat] = $color
      pos [set every repeat] = $position
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Simon task cond(Sheet1)(in).csv
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('color', 'red'), ('position', [-0.3, 0]), ('correct_key', 'z'), ('congruency', 'congruent')]),
      OrderedDict([('color', 'red'), ('position', [0.3, 0]), ('correct_key', 'z'), ('congruency', 'incongruent')]),
      OrderedDict([('color', 'green'), ('position', [-0.3, 0]), ('correct_key', 'm'), ('congruency', 'incongruent')]),
      OrderedDict([('color', 'green'), ('position', [0.3, 0]), ('correct_key', 'm'), ('congruency', 'congruent')]),
      OrderedDict([('color', 'red'), ('position', [-0.3, 0]), ('correct_key', 'z'), ('congruency', 'congruent')]),
      OrderedDict([('color', 'red'), ('position', [0.3, 0]), ('correct_key', 'z'), ('congruency', 'incongruent')]),
      OrderedDict([('color', 'green'), ('position', [-0.3, 0]), ('correct_key', 'm'), ('congruency', 'incongruent')]),
      OrderedDict([('color', 'green'), ('position', [0.3, 0]), ('correct_key', 'm'), ('congruency', 'congruent')]),
      OrderedDict([('color', 'red'), ('position', [-0.3, 0]), ('correct_key', 'z'), ('congruency', 'congruent')]),
      OrderedDict([('color', 'red'), ('position', [0.3, 0]), ('correct_key', 'z'), ('congruency', 'incongruent')])]
    Routine trial
  LoopTerminator trials
